print("\\Clear")

//	MIT License

//	Copyright (c) 2018 Nicholas Condon n.condon@uq.edu.au

//	Permission is hereby granted, free of charge, to any person obtaining a copy
//	of this software and associated documentation files (the "Software"), to deal
//	in the Software without restriction, including without limitation the rights
//	to use, copy, modify, merge, publish, distribute, sublicense, and/or sell
//	copies of the Software, and to permit persons to whom the Software is
//	furnished to do so, subject to the following conditions:

//	The above copyright notice and this permission notice shall be included in all
//	copies or substantial portions of the Software.

//	THE SOFTWARE IS PROVIDED "AS IS", WITHOUT WARRANTY OF ANY KIND, EXPRESS OR
//	IMPLIED, INCLUDING BUT NOT LIMITED TO THE WARRANTIES OF MERCHANTABILITY,
//	FITNESS FOR A PARTICULAR PURPOSE AND NONINFRINGEMENT. IN NO EVENT SHALL THE
//	AUTHORS OR COPYRIGHT HOLDERS BE LIABLE FOR ANY CLAIM, DAMAGES OR OTHER
//	LIABILITY, WHETHER IN AN ACTION OF CONTRACT, TORT OR OTHERWISE, ARISING FROM,
//	OUT OF OR IN CONNECTION WITH THE SOFTWARE OR THE USE OR OTHER DEALINGS IN THE
//	SOFTWARE.


//IMB Macro Splash screen (Do not remove this acknowledgement)
scripttitle="Live LLSM De-Stacker";
version="1.0";
versiondate="14/01/2019";
description="Details: <br>This script takes open 3D/4D images and de-stacks them into lower dimensional files. Files are filtered by their extension (.czi, .lsm etc) and should already be open within the FIJI environment. <br><br> Processed images/movies will be placed into a subdirectory called filename+'_extracted'. <br> <br> The log window display the current frame position and/or completion time"
    
    showMessage("Institute for Molecular Biosciences ImageJ Script", "<html>" 
    +"<h1><font size=6 color=Teal>ACRF: Cancer Biology Imaging Facility</h1>
    +"<h1><font size=5 color=Purple><i>The Institute for Molecular Bioscience <br> The University of Queensland</i></h1>
    +"<h4><a href=http://imb.uq.edu.au/Microscopy/>ACRF: Cancer Biology Imaging Facility</a><\h4>"
    +"<h1><font color=black>ImageJ Script Macro: "+scripttitle+"</h1> "
    +"<p1>Version: "+version+" ("+versiondate+")</p1>"
    +"<H2><font size=3>Created by Nicholas Condon</H2>"	
    +"<p1><font size=2> contact n.condon@uq.edu.au \n </p1>" 
    +"<P4><font size=2> Available for use/modification/sharing under the "+"<p4><a href=https://opensource.org/licenses/MIT/>MIT License</a><\h4> </P4>"
    +"<h3>   <\h3>"    
    +"<p1><font size=3 \b i>"+description+".</p1>"
   	+"<h1><font size=2> </h1>"  
	+"<h0><font size=5> </h0>"
    +"");

    

//Directory Warning panel     
Dialog.create("Choosing your image output location");
 	Dialog.addMessage("Use the next window to navigate to your desired output directory (RDM Cache)");
  	Dialog.addMessage("(Note a sub-directory will be made for each input image within this fodler) ");
  	Dialog.addMessage("Take note of your file extension (eg .tif, .czi)");
 Dialog.show();



path = getDirectory("Choose Source Directory ");
list = getFileList(path);



//Parameter selection box
ext = ".tif";
  Dialog.create("Select DIMENSIONALITY");
  	Dialog.addString("File Extension:", ext);
 	Dialog.addMessage("(For example .czi  .lsm  .nd2  .lif  .ims)");
  	Dialog.addMessage(" ");
  	Dialog.addMessage("Select how you wish to reduce the dimensionality of your files");
  	Dialog.addCheckbox("Frames", false);
  	Dialog.addCheckbox("Slices", false);
 	Dialog.addCheckbox("Channels", false);
 	Dialog.addCheckbox("Subfolders", true);
 	Dialog.show();
	choiceFrames=Dialog.getCheckbox();
	choiceSlices = Dialog.getCheckbox();
	choiceChannels = Dialog.getCheckbox();
	choiceSubfolders = Dialog.getCheckbox();
	ext = Dialog.getString();


start = getTime();
setBatchMode(true);
fs =File.separator;

	windowtitle = getTitle();
	windowtitlenoext = replace(windowtitle, ext, "");
	print("");
	
	
	resultsDir = path+windowtitlenoext+"_Extracted"+fs;
	if(choiceSubfolders ==0){resultsDir=path;}
	File.makeDirectory(resultsDir);
	d = Stack.getDimensions(width, height, channels, slices, frames); 
	print("Total Number of Frames = "+frames);
	print("Total Number of Slices = "+slices);
	print("Total Number of Channels = "+channels);
		
		
		//Loops through each frame of the stack until total frames are saved out individually
		if (choiceFrames==1 && choiceSlices==0 && choiceChannels==0){
			for (i=0; i<frames; i++){
				fr=i+1;
				Stack.setFrame(i); 
				run("Reduce Dimensionality...", "slices channels keep"); 
				rename(windowtitlenoext+"_t"+fr);
			 	finalname = getTitle();
				print("Saving Frame # "+fr+" of "+frames);
				saveAs("Tiff", resultsDir+ finalname+".tif"); 
				close();}}

		//Loops through each frame and slice until all are saved		
		if (choiceFrames==1 && choiceSlices==1 && choiceChannels==0){
				for (i=0; i<frames; i++){
				fr=i+1;
				Stack.setFrame(i); 
				run("Reduce Dimensionality...", "slices channels keep"); 
				rename(windowtitlenoext+"_t"+fr);
				for (s=0; s<slices; s++){
					sl=s+1;
					Stack.setSlice(s); 
					run("Reduce Dimensionality...", "channels keep"); 
					rename(windowtitlenoext+"_t"+fr+"_z"+sl);
					finalname = getTitle();
					print("Saving Frame # "+fr+" of "+frames+" Slice # "+sl);
					saveAs("Tiff", resultsDir+ finalname+".tif"); 
					close();}
					close();
					}}

		//Loops through each frame, slice, and channel, until all are saved
		if (choiceFrames==1 && choiceSlices==1 && choiceChannels==1){
				//i=1;s=1;c=1;
				for (i=0; i<frames; i++){ 
					Stack.setFrame(i); 
					run("Reduce Dimensionality...", "slices channels keep"); 
					rename(windowtitlenoext+"_t"+i);
					fr=i+1;
				 	for (s=0; s<slices; s++){ 
				 		Stack.setSlice(s);
						run("Reduce Dimensionality...", "channels keep"); 
						rename(windowtitlenoext+"_t"+fr+"_z"+s);
						sl=s+1;
						for (c=0; c<channels; c++){
							ch=c+1;
							run("Duplicate...", "duplicate channels="+ch);
							rename(windowtitlenoext+"_t"+fr+"_z"+sl+"_c"+ch);
							finalname = getTitle();
							print("Saving Frame # "+fr+" of "+frames+" Slice # "+sl+" of "+slices+" Channel # "+ch+" of "+channels);
							saveAs("Tiff", resultsDir+ finalname+".tif"); 
							close();
							}
						close();
						}
					close(); 
						}
						}

		//saves out only channels
		if (choiceFrames==0 && choiceSlices==0 && choiceChannels==1){
				for (c=0; c<channels; c++){
					ch=c+1;
					run("Duplicate...", "duplicate channels="+ch);
					rename(windowtitlenoext+"_c"+ch);
					finalname = getTitle();
					print("Saving Channel # "+ch+" of "+channels);
							saveAs("Tiff", resultsDir+ finalname+".tif"); 
							close();
							}
		}

		//saves out slices and channels
		if (choiceFrames==0 && choiceSlices==1 && choiceChannels==0){
				for (s=0; s<slices; s++){
					sl=s+1;
					Stack.setSlice(s); 
					run("Reduce Dimensionality...", "frames channels keep"); 
					rename(windowtitlenoext+"_z"+sl);
					finalname = getTitle();
					print("Saving Slice # "+sl+" of "+slices);
					saveAs("Tiff", resultsDir+ finalname+".tif"); 
					close();}
					}

		//saves out frames and channels
		if (choiceFrames==1 && choiceSlices==0 && choiceChannels==1){
				//i=1;s=1;c=1;
				for (i=0; i<frames; i++){ 
					Stack.setFrame(i); 
					run("Reduce Dimensionality...", "slices channels keep"); 
					rename(windowtitlenoext+"_t"+i);
					fr=i+1; 	
					for (c=0; c<channels; c++){
							ch=c+1;
							run("Duplicate...", "duplicate channels="+ch);
							rename(windowtitlenoext+"_t"+fr+"_c"+ch);
							finalname = getTitle();
							print("Saving Frame # "+fr+" of "+frames+" Channel # "+ch+" of "+channels);
							saveAs("Tiff", resultsDir+ finalname+".tif"); 
							close();
							}
						close();
						}
					 
						}
	
		
print("");
print("Batch Completed");
print("Total Runtime was:");
print((getTime()-start)/1000); 
		
